<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT59S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>(it-512)*10.0/512.0</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="TemporalFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Angle>0</Angle>
        <SpatialFrequency>5</SpatialFrequency>
        <TemporalFrequency>1.37695313</TemporalFrequency>
        <Phase>0</Phase>
        <SquareWave>false</SquareWave>
        <Contrast>100</Contrast>
        <Radius>2</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="10" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>