<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>664</cv:Width>
            <cv:Height>524</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>664</cv:Width>
            <cv:Height>524</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Keys">
          <Value>S</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camA.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LoadCamA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camA.png</cv:FileName>
                <cv:Mode>Grayscale</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>664</cv:Width>
                  <cv:Height>524</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camA.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camB.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LoadCamB</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camA.png</cv:FileName>
                <cv:Mode>Grayscale</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>664</cv:Width>
                  <cv:Height>524</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camA.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Rig\Desktop\MouseImages</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>K1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source3" />
            <Edge From="3" To="6" Label="Source3" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>FilePath</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="32" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="29" Label="Source2" />
      <Edge From="4" To="25" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="20" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="17" Label="Source2" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="32" Label="Source2" />
      <Edge From="11" To="20" Label="Source2" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="23" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="35" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>