<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>664</cv:Width>
            <cv:Height>524</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>664</cv:Width>
            <cv:Height>524</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Keys">
          <Value>S</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camA.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LoadCamA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>C:\Users\Rig\Desktop\MouseImages\PCX6\PCX6_camA.png</cv:FileName>
                <cv:Mode>Grayscale</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>664</cv:Width>
                  <cv:Height>524</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Horizontal</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Transpose" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\PCX6\PCX6_camA.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camB.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LoadCamB</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>C:\Users\Rig\Desktop\MouseImages\PCX6\PCX6_camB.png</cv:FileName>
                <cv:Mode>Grayscale</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>664</cv:Width>
                  <cv:Height>524</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>0.2</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>1</cv:Val1>
            <cv:Val2>1</cv:Val2>
            <cv:Val3>1</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>173</cv:X>
                <cv:Y>442</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>442</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>427</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>420</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>413</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>163</cv:X>
                <cv:Y>413</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>173</cv:X>
                <cv:Y>413</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>49</cv:X>
                <cv:Y>443</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>56</cv:X>
                <cv:Y>443</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>56</cv:X>
                <cv:Y>432</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>49</cv:X>
                <cv:Y>432</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>628</cv:X>
                <cv:Y>2</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>626</cv:X>
                <cv:Y>2</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>626</cv:X>
                <cv:Y>0</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>628</cv:X>
                <cv:Y>0</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivityDetected">
          <cv:Index xsi:nil="true" />
          <cv:Threshold>25000</cv:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>LickState</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\PCX6\PCX6_camB.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Metadata.embeddedGPIOPinState</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt32">
            <Value>2000000000</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TriggeredWindow">
            <rx:Count xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>camBVideo</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>VideoPath</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>_camB.avi</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Add" />
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\Users\Rig\Desktop\MouseVideos\PCX2\20210318\PCX2_camB.avi</cv:FileName>
                  <cv:Suffix>FileCount</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>false</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>30</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="6" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TriggeredWindow">
            <rx:Count xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>camAVideo</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>VideoPath</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>_camA.avi</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Add" />
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\Users\Rig\Desktop\MouseVideos\PCX2\20210318\PCX2_camA.avi</cv:FileName>
                  <cv:Suffix>FileCount</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>false</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>30</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="6" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LickState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM7</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Rig\Desktop\MouseImages</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PCX6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Rig\Desktop\MouseVideos</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Date" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>20210506</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="15" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="5" To="11" Label="Source2" />
            <Edge From="5" To="19" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="21" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>FilePath</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>VideoPath</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="45" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="41" Label="Source1" />
      <Edge From="1" To="48" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="31" Label="Source2" />
      <Edge From="3" To="39" Label="Source2" />
      <Edge From="4" To="27" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="22" Label="Source1" />
      <Edge From="6" To="50" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="17" Label="Source2" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="41" Label="Source2" />
      <Edge From="11" To="22" Label="Source2" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="25" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="44" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="30" To="39" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="47" To="50" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="54" To="57" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>