<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>9600</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM10</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%B</Pattern>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>2*(it-121)/255</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>0.05*(Math.Max(it-10,0))/(it-10)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>-0</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>-0.9490196</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1328</cv:Width>
            <cv:Height>1048</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camB.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camB.png</cv:FileName>
          <cv:Mode>Grayscale</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>NoColorProcessing</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1328</cv:Width>
            <cv:Height>1048</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FilePath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_camA.png</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\Rig\Desktop\MouseImages\K1\K1_camA.png</cv:FileName>
          <cv:Mode>Grayscale</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Normalize" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Rig\Desktop\MouseImages</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>K1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source3" />
            <Edge From="3" To="6" Label="Source3" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>FilePath</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="11" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="26" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="40" Label="Source2" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>