<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>BonsaiArduino</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>10</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>StimArduino</io:Name>
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>StimArduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%B</Pattern>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
          <Value>131</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>BonsaiArduino</ard:PortName>
          <ard:Pin>11</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>from System import Tuple

@returns(Tuple[float,int])
def process(value):
  extent = float(value&gt;10)
  location = 2*(value - 121)/255
  return Tuple.Create(extent,location)</scr:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.1</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>-1</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>Adaptive</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>163</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>