<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>BonsaiArduino</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>10</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>StimArduino</io:Name>
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>StimArduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%B</Pattern>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
          <Value>131</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>BonsaiArduino</ard:PortName>
          <ard:Pin>11</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>